PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = эксп мм
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Наш эксперимент исследует реакции на сообщения о стихийных бедствиях.

        Представьте – произошло стихийное бедствие или природная аномалия, Вы выходите в Интернет чтобы узнать об этом и читаете различные новости.

        В рамках эксперимента мы собрали для вас отрывки таких новостей из Телеграмм - каналов о каком-либо стихийном бедствии или природной аномалии. Ваша задача – «листать» эти сообщения до тех пор, пока не почувствуете, что готовы ответить на ОБЩИЕ вопросы о произошедшем. (Важно понимать, что вопросы не будут касаться деталей события, а только его общего хода).

        Для того, чтобы перейти к следующему сообщению - нажмите 'g', для того - чтобы закончить перейти к ответам на вопросы - нажмите 'k'.

        После ответов на вопросы Вы автоматически перейдете к следующему тематическому блоку, посвященному другому стихийному бедствию, где
        Ваша задача снова будет «листать» сообщения до тех пор, пока не почувствуете, что готовы ответить на ОБЩИЕ вопросы о данном происшествии. И так 9 раз.

        Нажмите пробел, чтобы приступить к эксперименту.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1trail
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    TextComponent text_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Произошло …….. Мы создали подборку отрывков новостных сообщений из Telegram каналов об этом событии. Читайте, пока не почувствуете, что составили достаточное представление о ситуации.

        Если хотите продолжать чтение - нажмите 'y', если почувствовали, что составили достаточное представление о ситуации - переходите к ответам на вопросы - нажмите 'n'.

        Нажмите пробел, когда будете готовы начать.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1mm
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_storm
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        a=""
        b=0
      Each Frame:
        if 'n' in key_resp_3.keys:
            if loop_1.thisN >= 7:
                loop_1.finished = True
                c = 6 - loop_1.thisN
                a = "Выход из цикла по 'n'"
                print(a)
                b = 0
            else:
                a = f"Минимальное количество прочтенных текстов необходимое для перехода к вопросам: {c}"
                print(a)
                b = 2
  Routine end
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = пока
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  Routine fix_0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine fix
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine nono
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $b
      text [set every repeat] = $a
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  Routine _stormq1
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Печатайте здесь...
      pos = (0, -0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = вопрос1
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    KeyboardComponent key_resp_4
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine routine_1trail
  Routine fix_0
  LoopInitiator loop_1 loopType="TrialHandler"
    conditionsFile = таблица для экспа_1 - Лист1.csv
    loopType = sequential
    nReps = 28
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    conditions:
      [OrderedDict([('manip', 'Gen'), ('subtopic', 'Начало'), ('topic', 'Шторм на озере'), ('text_storm', 'Шторм на озере начался внезапно, без предупреждения. Это уже второй случай за месяц. Возможно, такие погодные аномалии становятся новой нормой, что вызывает беспокойство у местных жителей.')]),
      OrderedDict([('manip', 'Slip'), ('subtopic', 'Начало'), ('topic', 'Шторм на озере'), ('text_storm', 'Шторм на озере: за 15 минут ветер усилился до 80 км/ч, а волны достигли двух метров в высоту. Это может привести к повреждению лодок. В результате, туристы могут отказаться от посещения, что ударит по местной экономике.')]),
      OrderedDict([('manip', 'FC'), ('subtopic', 'Площадь/география'), ('topic', 'Шторм на озере'), ('text_storm', 'Шторм на озере затронул только центральную часть из-за необычного расположения луны. Ученые утверждают, что редкое лунное притяжение вызвало локализованное усиление ветров.')]),
      OrderedDict([('manip', 'FA'), ('subtopic', 'Площадь/география'), ('topic', 'Шторм на озере'), ('text_storm', 'Шторм на озере усилился из-за отсутствия преград. Как и в случае с гигантскими морскими штормами, гшансов на спасение было мало.   ')]),
      OrderedDict([('manip', 'Gen'), ('subtopic', 'причина'), ('topic', 'Шторм на озере'), ('text_storm', 'Шторм на озере возник из-за резкого столкновения двух фронтов. Это событие еще раз доказывает глобальное изменение климата, которые, возможно, становятся причиной учащения таких явлений.')])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
    Routine routine_1mm
    Routine nono
    Routine fix
  LoopTerminator loop_1
  Routine _stormq1
  Routine _stormq1
  Routine end
